PsychoPy2experiment version="2022.2.5"
Settings
  Data filename = u'data/%s_%s' % (expName, expInfo['date'])
  Experiment info = {}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = visual_receptivefield
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent photo_diod_rect
      anchor = bottom-right
      fillColor = white
      pos = (960, -540)
      shape = rectangle
      size = (60, 60)
      startVal [time (s)] = 0.000
      stopVal [duration (s)] = 0.020
      units = pix
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    PolygonComponent black_screen
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (1.0, 1.0)
      startVal [time (s)] = 0.020
      stopVal [duration (s)] = 0.300
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    PolygonComponent stimulus
      anchor = bottom-left
      fillColor = white
      pos = (-1, -1)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.020
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  Routine black_wait
    PolygonComponent start_black
      fillColor = black
      lineColor = black
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine black_wait
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine trial
  LoopTerminator trials
  Routine black_wait
